CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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enabled:False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
    Select the input image:DNA
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:6|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enabled:False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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Divide by the image's maximum
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
EnhanceOrSuppressFeatures:[module_num:7|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enabled:False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
    Select the input image:DNA
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:5
    Feature type:Dark holes
    Range of hole sizes:1,10
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
CorrectIlluminationCalculate:[module_num:8|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enabled:False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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:90
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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enabled:False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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:10|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:255
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
EnhanceOrSuppressFeatures:[module_num:11|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enabled:False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
    Select the input image:RescaleIntensity
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Threshold:[module_num:12|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
    Select the input image:RescaleIntensity
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Morph:[module_num:13|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enabled:False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
    Select the input image:Threshold
    Name the output image:MorphBlue
    Select the operation to perform:remove
    Number of times to repeat operation:Once
    Line length:5
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
Smooth:[module_num:14|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
    Select the input image:Threshold
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
EnhanceEdges:[module_num:15|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
    Select the input image:FilteredImage
    Name the output image:EdgedImage
    Automatically calculate the threshold?:Yes
    Absolute threshold:0.2
    Threshold adjustment factor:3
    Select an edge-finding method:Canny
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
    Calculate value for low threshold automatically?:Yes
    Low threshold value:0.1

ColorToGray:[module_num:16|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enabled:False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
    Select the input image:CorrBlue
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:EdgedImage
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):50,120
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.1,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskImage:[module_num:18|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enabled:False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
    Select the input image:EdgedImage
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:IdentifyPrimaryObjects
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:19|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
    Select images to measure:DNA
    Select objects to measure:IdentifyPrimaryObjects

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:21|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
    Select images to measure:DNA
    Select objects to measure:IdentifyPrimaryObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToDatabase:[module_num:22|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
    Database type:MySQL
    Database name:cellprofiler_db
    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
    Database host:localhost
    Username:csarmien4
    Password:Work2447!
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:CellSeg
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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